<CompuCell3D Revision="20210612" Version="4.2.5">
   
   <Metadata>
      
      <!-- Basic properties simulation -->
      <NumberOfProcessors>1</NumberOfProcessors>
      <DebugOutputFrequency>10</DebugOutputFrequency>
      <!-- <NonParallelModule Name="Potts"/> -->
   </Metadata>
   
   <Potts>
      
      <!-- Basic properties of CPM (GGH) algorithm -->
      <Dimensions x="240" y="197" z="1"/>
      <Steps>100000</Steps>
      <Temperature>10.0</Temperature>
      <NeighborOrder>1</NeighborOrder>
   </Potts>
   
  
   <Plugin Name="CellType">
      
      <!-- Listing all cell types in the simulation -->
      <CellType TypeId="0" TypeName="Medium"/>
      <CellType TypeId="1" TypeName="Fiber"/>
      <CellType TypeId="2" TypeName="ECM" Freeze=""/>
      <CellType TypeId="3" TypeName="SSC"/>
      <CellType TypeId="4" TypeName="Capillary" Freeze=""/>
      <CellType TypeId="5" TypeName="Neutrophil"/>
      <CellType TypeId="6" TypeName="Macrophage"/>
      <CellType TypeId="7" TypeName="Necrotic" Freeze=""/>
      <CellType TypeId="8" TypeName="Wall" Freeze=""/>
      <CellType TypeId="9" TypeName="lymphatic"/>
   </Plugin>
   
   
   
<Plugin Name="Volume">
</Plugin>

<Plugin Name="Surface">
</Plugin>


   <Plugin Name="CenterOfMass">
      
      <!-- Module tracking center of mass of each cell -->
   </Plugin>
   
   <Plugin Name="NeighborTracker">
      
      <!-- Module tracking neighboring cells of each cell -->
   </Plugin>
   


<Plugin Name="Contact">
   <!-- Specification of adhesion energies -->
   <Energy Type1="Medium" Type2="Medium">10.0</Energy>
   <Energy Type1="Medium" Type2="Fiber">10.0</Energy>
   <Energy Type1="Medium" Type2="ECM">10.0</Energy>
   <Energy Type1="Medium" Type2="SSC">10.0</Energy>
   <Energy Type1="Medium" Type2="Capillary">10.0</Energy>
   <Energy Type1="Medium" Type2="Neutrophil">10.0</Energy>
   <Energy Type1="Medium" Type2="Macrophage">10.0</Energy>
   <Energy Type1="Medium" Type2="Necrotic">10.0</Energy>
   <Energy Type1="Medium" Type2="Wall">10.0</Energy>
   <Energy Type1="Medium" Type2="lymphatic">10.0</Energy>
   <Energy Type1="Fiber" Type2="Fiber">10.0</Energy>
   <Energy Type1="Fiber" Type2="ECM">10.0</Energy>
   <Energy Type1="Fiber" Type2="SSC">10.0</Energy>
   <Energy Type1="Fiber" Type2="Capillary">10.0</Energy>
   <Energy Type1="Fiber" Type2="Neutrophil">10.0</Energy>
   <Energy Type1="Fiber" Type2="Macrophage">10.0</Energy>
   <Energy Type1="Fiber" Type2="Necrotic">10.0</Energy>
   <Energy Type1="Fiber" Type2="Wall">10.0</Energy>
   <Energy Type1="Fiber" Type2="lymphatic">10.0</Energy>
   <Energy Type1="ECM" Type2="ECM">10.0</Energy>
   <Energy Type1="ECM" Type2="SSC">10.0</Energy>
   <Energy Type1="ECM" Type2="Capillary">10.0</Energy>
   <Energy Type1="ECM" Type2="Neutrophil">10.0</Energy>
   <Energy Type1="ECM" Type2="Macrophage">10.0</Energy>
   <Energy Type1="ECM" Type2="Necrotic">10.0</Energy>
   <Energy Type1="ECM" Type2="Wall">10.0</Energy>
   <Energy Type1="ECM" Type2="lymphatic">10.0</Energy>
   <Energy Type1="SSC" Type2="SSC">10.0</Energy>
   <Energy Type1="SSC" Type2="Capillary">10.0</Energy>
   <Energy Type1="SSC" Type2="Neutrophil">10.0</Energy>
   <Energy Type1="SSC" Type2="Macrophage">10.0</Energy>
   <Energy Type1="SSC" Type2="Necrotic">10.0</Energy>
   <Energy Type1="SSC" Type2="Wall">10.0</Energy>
   <Energy Type1="SSC" Type2="lymphatic">10.0</Energy>
   <Energy Type1="Capillary" Type2="Capillary">10.0</Energy>
   <Energy Type1="Capillary" Type2="Neutrophil">10.0</Energy>
   <Energy Type1="Capillary" Type2="Macrophage">10.0</Energy>
   <Energy Type1="Capillary" Type2="Necrotic">10.0</Energy>
   <Energy Type1="Capillary" Type2="Wall">10.0</Energy>
   <Energy Type1="Capillary" Type2="lymphatic">10.0</Energy>
   <Energy Type1="Neutrophil" Type2="Neutrophil">10.0</Energy>
   <Energy Type1="Neutrophil" Type2="Macrophage">10.0</Energy>
   <Energy Type1="Neutrophil" Type2="Necrotic">10.0</Energy>
   <Energy Type1="Neutrophil" Type2="Wall">10.0</Energy>
   <Energy Type1="Neutrophil" Type2="lymphatic">10.0</Energy>
   <Energy Type1="Macrophage" Type2="Macrophage">10.0</Energy>
   <Energy Type1="Macrophage" Type2="Necrotic">10.0</Energy>
   <Energy Type1="Macrophage" Type2="Wall">10.0</Energy>
   <Energy Type1="Macrophage" Type2="lymphatic">10.0</Energy>
   <Energy Type1="Necrotic" Type2="Necrotic">10.0</Energy>
   <Energy Type1="Necrotic" Type2="Wall">10.0</Energy>
   <Energy Type1="Necrotic" Type2="lymphatic">10.0</Energy>
   <Energy Type1="Wall" Type2="Wall">10.0</Energy>
   <Energy Type1="Wall" Type2="lymphatic">10.0</Energy>
   <Energy Type1="lymphatic" Type2="lymphatic">10.0</Energy>
   <NeighborOrder>1</NeighborOrder>
</Plugin>


   
   <!-- <Steppable Type="PIFInitializer"> -->
   
   <!-- Initial layout of cells using PIFF file.    -->
   <!-- <PIFName>examplePiffIteration1.piff</PIFName> -->
<!-- </Steppable> -->
   
</CompuCell3D>